[[model]]
author: Myokit CellML 1 API
name: ToRORd_dyn_chloride
# Initial values
membrane.v               = -90.74563
CaMK.CaMKt               =  1.27354100000000008e-2
intracellular_ions.nai   = 13.40062
intracellular_ions.nass  = 13.40094
intracellular_ions.ki    = 152.3639
intracellular_ions.kss   = 152.3638
intracellular_ions.cass  =  5.74992100000000007e-5
intracellular_ions.cansr = 1.806794
intracellular_ions.cajsr = 1.805047
intracellular_ions.cai   =  6.62181600000000064e-5
intracellular_ions.cli   = 34.31721
intracellular_ions.clss  = 34.31719
INa.m                    =  5.25323099999999992e-4
INa.h                    = 0.8645148
INa.j                    = 0.8644571
INa.hp                   = 0.7313656
INa.jp                   = 0.8643527
INaL.mL                  =  1.11796899999999993e-4
INaL.hL                  = 0.5916536
INaL.hLp                 = 0.3476812
Ito.a                    =  8.32040799999999984e-4
Ito.iF                   = 0.9997242
Ito.iS                   = 0.9997235
Ito.ap                   =  4.23912100000000010e-4
Ito.iFp                  = 0.9997242
Ito.iSp                  = 0.9997241
ICaL.d                   = -2.48652700000000000e-36
ICaL.ff                  = 1
ICaL.fs                  = 0.9510602
ICaL.fcaf                = 1
ICaL.fcas                = 0.9999377
ICaL.jca                 = 0.9999886
ICaL.ffp                 = 1
ICaL.fcafp               = 1
ICaL.nca_ss              =  3.04952299999999984e-4
ICaL.nca_i               =  5.27266800000000032e-4
IKr.IC1                  =  0.999637
IKr.IC2                  =  6.83207999999999982e-5
IKr.C1                   =  1.80144999999999990e-8
IKr.C2                   =  8.26618999999999954e-5
IKr.O                    =  1.55510000000000007e-4
IKr.IO                   =  5.67622999999999969e-5
IKr.IObound              =  0
IKr.Obound               =  0
IKr.Cbound               =  0
# IKr.D                    =  0
IKs.xs1                  = 0.2233584
IKs.xs2                  =  1.41824699999999998e-4
ryr.Jrel_np              =  6.77882699999999957e-25
ryr.Jrel_p               = -1.58194099999999996e-23

[tune]
ical_rescale = 1
    in [1]
ikr_rescale = 1
    in [1]

[CaMK]
CaMKa = CaMKb + CaMKt
    in [mM]
CaMKb = CaMKo * (1 [mM] - CaMKt) / (1 + KmCaM / intracellular_ions.cass)
    in [mM]
CaMKo = 0.05
    in [1]
dot(CaMKt) = aCaMK * CaMKb * (CaMKb + CaMKt) - bCaMK * CaMKt
    in [mM]
KmCaM = 0.0015 [mM]
    in [mM]
KmCaMK = 0.15 [mM]
    in [mM]
aCaMK = 0.05 [1/mM/ms]
    in [1/mM/ms]
bCaMK = 0.00068 [mS/uF]
    in [mS/uF]

[ICaL]
Afcaf = 0.3 + 0.6 / (1 + exp((membrane.v - 10 [mV]) / 10 [mV]))
    in [1]
Afcas = 1 - Afcaf
    in [1]
Aff = 0.6
    in [1]
Afs = 1 - Aff
    in [1]
ICaK = ICaK_ss + ICaK_i
    in [A/F]
ICaK_i = (1 - ICaL_fractionSS) * ((1 - fICaLp) * PCaK * PhiCaK_i * d * (f * (1 - nca_i) + jca * fca * nca_i) + fICaLp * PCaKp * PhiCaK_i * d * (fp * (1 - nca_i) + jca * fcap * nca_i))
    in [A/F]
ICaK_ss = ICaL_fractionSS * ((1 - fICaLp) * PCaK * PhiCaK_ss * d * (f * (1 - nca_ss) + jca * fca * nca_ss) + fICaLp * PCaKp * PhiCaK_ss * d * (fp * (1 - nca_ss) + jca * fcap * nca_ss))
    in [A/F]
ICaL = ICaL_ss + ICaL_i
    in [A/F]
    oxmeta: membrane_L_type_calcium_current
ICaL_fractionSS = 0.8
    in [1]
ICaL_i = (1 - ICaL_fractionSS) * ((1 - fICaLp) * PCa * PhiCaL_i * d * (f * (1 - nca_i) + jca * fca * nca_i) + fICaLp * PCap * PhiCaL_i * d * (fp * (1 - nca_i) + jca * fcap * nca_i))
    in [A/F]
ICaL_ss = ICaL_fractionSS * ((1 - fICaLp) * PCa * PhiCaL_ss * d * (f * (1 - nca_ss) + jca * fca * nca_ss) + fICaLp * PCap * PhiCaL_ss * d * (fp * (1 - nca_ss) + jca * fcap * nca_ss))
    in [A/F]
ICaNa = ICaNa_ss + ICaNa_i
    in [A/F]
ICaNa_i = (1 - ICaL_fractionSS) * ((1 - fICaLp) * PCaNa * PhiCaNa_i * d * (f * (1 - nca_i) + jca * fca * nca_i) + fICaLp * PCaNap * PhiCaNa_i * d * (fp * (1 - nca_i) + jca * fcap * nca_i))
    in [A/F]
ICaNa_ss = ICaL_fractionSS * ((1 - fICaLp) * PCaNa * PhiCaNa_ss * d * (f * (1 - nca_ss) + jca * fca * nca_ss) + fICaLp * PCaNap * PhiCaNa_ss * d * (fp * (1 - nca_ss) + jca * fcap * nca_ss))
    in [A/F]
Ii = 0.5 * (intracellular_ions.nai + intracellular_ions.ki + intracellular_ions.cli + 4 * intracellular_ions.cai) / 1000 [mM]
    in [1]
Io = 0.5 * (extracellular.nao + extracellular.ko + extracellular.clo + 4 * extracellular.cao) / 1000 [mM]
    in [1]
Iss = 0.5 * (intracellular_ions.nass + intracellular_ions.kss + intracellular_ions.clss + 4 * intracellular_ions.cass) / 1000 [mM]
    in [1]
Kmn = 0.002 [mM]
    in [mM]
PCa = piecewise(environment.celltype == 1, PCa_b * 1.2, environment.celltype == 2, PCa_b * 2, PCa_b)
    in [1]
PCaK = 0.0003574 * PCa
    in [1]
PCaKp = 0.0003574 * PCap
    in [1]
PCaNa = 0.00125 * PCa
    in [1]
PCaNap = 0.00125 * PCap
    in [1]
PCa_b =  8.37570000000000046e-5
    in [1]
    oxmeta: membrane_L_type_calcium_current_conductance
PCap = 1.1 * PCa
    in [1]
PhiCaK_i = 1 * membrane.vffrt * (gamma_ki * intracellular_ions.ki * exp(1 * membrane.vfrt) - gamma_ko * extracellular.ko) / (exp(1 * membrane.vfrt) - 1)
    in [1]
PhiCaK_ss = 1 * membrane.vffrt * (gamma_kss * intracellular_ions.kss * exp(1 * membrane.vfrt) - gamma_ko * extracellular.ko) / (exp(1 * membrane.vfrt) - 1)
    in [1]
PhiCaL_i = 4 * membrane.vffrt * (gamma_cai * intracellular_ions.cai * exp(2 * membrane.vfrt) - gamma_cao * extracellular.cao) / (exp(2 * membrane.vfrt) - 1)
    in [1]
PhiCaL_ss = 4 * membrane.vffrt * (gamma_cass * intracellular_ions.cass * exp(2 * membrane.vfrt) - gamma_cao * extracellular.cao) / (exp(2 * membrane.vfrt) - 1)
    in [1]
PhiCaNa_i = 1 * membrane.vffrt * (gamma_nai * intracellular_ions.nai * exp(1 * membrane.vfrt) - gamma_nao * extracellular.nao) / (exp(1 * membrane.vfrt) - 1)
    in [1]
PhiCaNa_ss = 1 * membrane.vffrt * (gamma_nass * intracellular_ions.nass * exp(1 * membrane.vfrt) - gamma_nao * extracellular.nao) / (exp(1 * membrane.vfrt) - 1)
    in [1]
anca_i = 1 / (k2n / km2n + (1 + Kmn / intracellular_ions.cai)^4)
    in [1]
anca_ss = 1 / (k2n / km2n + (1 + Kmn / intracellular_ions.cass)^4)
    in [1]
constA = 1820000 * (dielConstant * physical_constants.T)^(-1.5)
    in [1]
dot(d) = (dss - d) / td
    in [1]
dielConstant = 74 [1/K]
    in [1/K]
dss = piecewise(membrane.v >= 31.4978 [mV], 1, 1.0763 * exp(-1.007 * exp(-0.0829 [1/mV] * membrane.v)))
    in [1]
f = Aff * ff + Afs * fs
    in [1]
fICaLp = 1 / (1 + CaMK.KmCaMK / CaMK.CaMKa)
    in [1]
fca = Afcaf * fcaf + Afcas * fcas
    in [1]
dot(fcaf) = (fcass - fcaf) / tfcaf
    in [1]
dot(fcafp) = (fcass - fcafp) / tfcafp
    in [1]
fcap = Afcaf * fcafp + Afcas * fcas
    in [1]
dot(fcas) = (fcass - fcas) / tfcas
    in [1]
fcass = fss
    in [1]
dot(ff) = (fss - ff) / tff
    in [1]
dot(ffp) = (fss - ffp) / tffp
    in [1]
fp = Aff * ffp + Afs * fs
    in [1]
dot(fs) = (fss - fs) / tfs
    in [1]
fss = 1 / (1 + exp((membrane.v + 19.58 [mV]) / 3.696 [mV]))
    in [1]
gamma_cai = exp(-constA * 4 * (sqrt(Ii) / (1 + sqrt(Ii)) - 0.3 * Ii))
    in [1]
gamma_cao = exp(-constA * 4 * (sqrt(Io) / (1 + sqrt(Io)) - 0.3 * Io))
    in [1]
gamma_cass = exp(-constA * 4 * (sqrt(Iss) / (1 + sqrt(Iss)) - 0.3 * Iss))
    in [1]
gamma_ki = exp(-constA * 1 * (sqrt(Ii) / (1 + sqrt(Ii)) - 0.3 * Ii))
    in [1]
gamma_ko = exp(-constA * 1 * (sqrt(Io) / (1 + sqrt(Io)) - 0.3 * Io))
    in [1]
gamma_kss = exp(-constA * 1 * (sqrt(Iss) / (1 + sqrt(Iss)) - 0.3 * Iss))
    in [1]
gamma_nai = exp(-constA * 1 * (sqrt(Ii) / (1 + sqrt(Ii)) - 0.3 * Ii))
    in [1]
gamma_nao = exp(-constA * 1 * (sqrt(Io) / (1 + sqrt(Io)) - 0.3 * Io))
    in [1]
gamma_nass = exp(-constA * 1 * (sqrt(Iss) / (1 + sqrt(Iss)) - 0.3 * Iss))
    in [1]
dot(jca) = (jcass - jca) / tjca
    in [1]
jcass = 1 / (1 + exp((membrane.v + 18.08 [mV]) / 2.7916 [mV]))
    in [1]
k2n = 500 [mS/uF]
    in [mS/uF]
km2n = jca * 1 [mS/uF]
    in [mS/uF]
dot(nca_i) = anca_i * k2n - nca_i * km2n
    in [1]
dot(nca_ss) = anca_ss * k2n - nca_ss * km2n
    in [1]
offset = 0 [ms]
    in [ms]
td = offset + 0.6 [ms] + 1 [ms] / (exp(-0.05 [1/mV] * (membrane.v + vShift + 6 [mV])) + exp(0.09 [1/mV] * (membrane.v + vShift + 14 [mV])))
    in [ms]
tfcaf = 7 [ms] + 1 [ms] / (0.04 * exp(-(membrane.v - 4 [mV]) / 7 [mV]) + 0.04 * exp((membrane.v - 4 [mV]) / 7 [mV]))
    in [ms]
tfcafp = 2.5 * tfcaf
    in [ms]
tfcas = 100 [ms] + 1 [ms] / (0.00012 * exp(-membrane.v / 3 [mV]) + 0.00012 * exp(membrane.v / 7 [mV]))
    in [ms]
tff = 7 [ms] + 1 [ms] / (0.0045 * exp(-(membrane.v + 20 [mV]) / 10 [mV]) + 0.0045 * exp((membrane.v + 20 [mV]) / 10 [mV]))
    in [ms]
tffp = 2.5 * tff
    in [ms]
tfs = 1000 [ms] + 1 [ms] / (3.5e-5 * exp(-(membrane.v + 5 [mV]) / 4 [mV]) + 3.5e-5 * exp((membrane.v + 5 [mV]) / 6 [mV]))
    in [ms]
tjca = 72.5 [ms]
    in [ms]
vShift = 0 [mV]
    in [mV]

[ICab]
ICab = PCab * 4 * membrane.vffrt * (ICaL.gamma_cai * intracellular_ions.cai * exp(2 * membrane.vfrt) - ICaL.gamma_cao * extracellular.cao) / (exp(2 * membrane.vfrt) - 1)
    in [A/F]
PCab =  5.91940000000000005e-8 [mS/uF]
    in [mS/uF]

[ICl]
Fjunc = 1
    in [1]
GClCa = 0.2843 [mS/uF]
    in [mS/uF]
GClb = 0.00198 [mS/uF]
    in [mS/uF]
IClCa = IClCa_junc + IClCa_sl
    in [A/F]
IClCa_junc = Fjunc * GClCa / (1 + KdClCa / intracellular_ions.cass) * (membrane.v - reversal_potentials.EClss)
    in [A/F]
IClCa_sl = (1 - Fjunc) * GClCa / (1 + KdClCa / intracellular_ions.cai) * (membrane.v - reversal_potentials.ECl)
    in [A/F]
IClb = GClb * (membrane.v - reversal_potentials.ECl)
    in [A/F]
KdClCa = 0.1 [mM]
    in [mM]

[IK1]
GK1 = piecewise(environment.celltype == 1, GK1_b * 1.2, environment.celltype == 2, GK1_b * 1.3, GK1_b)
    in [mS/uF]
GK1_b = 0.6992 [mS/uF]
    in [mS/uF]
    oxmeta: membrane_inward_rectifier_potassium_current_conductance
IK1 = GK1 * sqrt(extracellular.ko / 5 [mM]) * K1ss * (membrane.v - reversal_potentials.EK)
    in [A/F]
    oxmeta: membrane_inward_rectifier_potassium_current
K1ss = aK1 / (aK1 + bK1)
    in [1]
aK1 = 4.094 / (1 + exp(0.1217 [1/mV] * (membrane.v - reversal_potentials.EK - 49.934 [mV])))
    in [1]
bK1 = (15.72 * exp(0.0674 [1/mV] * (membrane.v - reversal_potentials.EK - 3.257 [mV])) + exp(0.0618 [1/mV] * (membrane.v - reversal_potentials.EK - 594.31 [mV]))) / (1 + exp(-0.1629 [1/mV] * (membrane.v - reversal_potentials.EK + 14.207 [mV])))
    in [1]

[IKb]
GKb = piecewise(environment.celltype == 1, GKb_b * 0.6, GKb_b)
    in [mS/uF]
GKb_b = 0.0189 [mS/uF]
    in [mS/uF]
IKb = GKb * xkb * (membrane.v - reversal_potentials.EK)
    in [A/F]
xkb = 1 / (1 + exp(-(membrane.v - 10.8968 [mV]) / 23.9871 [mV]))
    in [1]

[IKr]
use membrane.v
A1 = 0.0264 [mS/uF]
    in [mS/uF]
A11 = 0.0007868 [mS/uF]
    in [mS/uF]
A2 = 4.986e-6 [mS/uF]
    in [mS/uF]
A21 = 5.455e-6 [mS/uF]
    in [mS/uF]
A3 = 0.001214 [mS/uF]
    in [mS/uF]
A31 = 0.005509 [mS/uF]
    in [mS/uF]
A4 = 1.854e-5 [mS/uF]
    in [mS/uF]
A41 = 0.001416 [mS/uF]
    in [mS/uF]
A51 = 0.4492 [mS/uF]
    in [mS/uF]
A52 = 0.3181 [mS/uF]
    in [mS/uF]
A53 = 0.149 [mS/uF]
    in [mS/uF]
A61 = 0.01241 [mS/uF]
    in [mS/uF]
A62 = 0.3226 [mS/uF]
    in [mS/uF]
A63 = 0.008978 [mS/uF]
    in [mS/uF]
B1 = 4.631e-5 [1/mV]
    in [1/mV]
B11 = 1.535e-8 [1/mV]
    in [1/mV]
B2 = -0.004226 [1/mV]
    in [1/mV]
B21 = -0.1688 [1/mV]
    in [1/mV]
B3 = 0.008516 [1/mV]
    in [1/mV]
B31 = 7.771e-9 [1/mV]
    in [1/mV]
B4 = -0.04641 [1/mV]
    in [1/mV]
B41 = -0.02877 [1/mV]
    in [1/mV]
B51 = 0.008595 [1/mV]
    in [1/mV]
B52 = 3.613e-8 [1/mV]
    in [1/mV]
B53 = 0.004668 [1/mV]
    in [1/mV]
B61 = 0.1725 [1/mV]
    in [1/mV]
B62 = -6.57499999999999990e-4 [1/mV]
    in [1/mV]
B63 = -0.02215 [1/mV]
    in [1/mV]
q1 = 4.843
q11 = 4.942
q2 = 4.23
q21 = 4.156
q3 = 4.962
q31 = 4.22
q4 = 3.769
q41 = 1.459
q51 = 5
q52 = 4.663
q53 = 2.412
q61 = 5.568
q62 = 5
q63 = 5.682
Kt = 3.5e-5 [mS/uF]
    in [mS/uF]
Ku = 0 [mS/uF]
    in [mS/uF]
Temp = 37
Vhalf = 1 [mV]
    in [mV]
halfmax = 1
n = 1
Kmax = 0
dot(C1) = -(A1 * exp(B1 * v) * C1 * exp((Temp - 20) * log(q1) / 10) - A2 * exp(B2 * v) * C2 * exp((Temp - 20) * log(q2) / 10)) - (A51 * exp(B51 * v) * C1 * exp((Temp - 20) * log(q51) / 10) - A61 * exp(B61 * v) * IC1 * exp((Temp - 20) * log(q61) / 10))
dot(C2) = A1 * exp(B1 * v) * C1 * exp((Temp - 20) * log(q1) / 10) - A2 * exp(B2 * v) * C2 * exp((Temp - 20) * log(q2) / 10) - (A31 * exp(B31 * v) * C2 * exp((Temp - 20) * log(q31) / 10) - A41 * exp(B41 * v) * O * exp((Temp - 20) * log(q41) / 10)) - (A52 * exp(B52 * v) * C2 * exp((Temp - 20) * log(q52) / 10) - A62 * exp(B62 * v) * IC2 * exp((Temp - 20) * log(q62) / 10))
# dot(D) = 0 [1/ms]
D = 0 [nM]
dot(IC1) = -(A11 * exp(B11 * v) * IC1 * exp((Temp - 20) * log(q11) / 10) - A21 * exp(B21 * v) * IC2 * exp((Temp - 20) * log(q21) / 10)) + A51 * exp(B51 * v) * C1 * exp((Temp - 20) * log(q51) / 10) - A61 * exp(B61 * v) * IC1 * exp((Temp - 20) * log(q61) / 10)
dot(IC2) = A11 * exp(B11 * v) * IC1 * exp((Temp - 20) * log(q11) / 10) - A21 * exp(B21 * v) * IC2 * exp((Temp - 20) * log(q21) / 10) - (A3 * exp(B3 * v) * IC2 * exp((Temp - 20) * log(q3) / 10) - A4 * exp(B4 * v) * IO * exp((Temp - 20) * log(q4) / 10)) + A52 * exp(B52 * v) * C2 * exp((Temp - 20) * log(q52) / 10) - A62 * exp(B62 * v) * IC2 * exp((Temp - 20) * log(q62) / 10)
dot(IO) = A3 * exp(B3 * v) * IC2 * exp((Temp - 20) * log(q3) / 10) - A4 * exp(B4 * v) * IO * exp((Temp - 20) * log(q4) / 10) + A53 * exp(B53 * v) * O * exp((Temp - 20) * log(q53) / 10) - A63 * exp(B63 * v) * IO * exp((Temp - 20) * log(q63) / 10) - (Kmax * Ku * exp(n * log(D)) / (exp(n * log(D)) + halfmax) * IO - Ku * A53 * exp(B53 * v) * exp((Temp - 20) * log(q53) / 10) / (A63 * exp(B63 * v) * exp((Temp - 20) * log(q63) / 10)) * IObound)
dot(O) = A31 * exp(B31 * v) * C2 * exp((Temp - 20) * log(q31) / 10) - A41 * exp(B41 * v) * O * exp((Temp - 20) * log(q41) / 10) - (A53 * exp(B53 * v) * O * exp((Temp - 20) * log(q53) / 10) - A63 * exp(B63 * v) * IO * exp((Temp - 20) * log(q63) / 10)) - (Kmax * Ku * exp(n * log(D)) / (exp(n * log(D)) + halfmax) * O - Ku * Obound)
dot(Cbound) = -(Kt / (1 + exp(-(v - Vhalf) / 6.789 [mV])) * Cbound - Kt * Obound) - (Kt / (1 + exp(-(v - Vhalf) / 6.789 [mV])) * Cbound - Kt * IObound)
dot(IObound) = Kmax * Ku * exp(n * log(D)) / (exp(n * log(D)) + halfmax) * IO - Ku * A53 * exp(B53 * v) * exp((Temp - 20) * log(q53) / 10) / (A63 * exp(B63 * v) * exp((Temp - 20) * log(q63) / 10)) * IObound + Kt / (1 + exp(-(v - Vhalf) / 6.789 [mV])) * Cbound - Kt * IObound
dot(Obound) = Kmax * Ku * exp(n * log(D)) / (exp(n * log(D)) + halfmax) * O - Ku * Obound + Kt / (1 + exp(-(v - Vhalf) / 6.789 [mV])) * Cbound - Kt * Obound
fKr = piecewise(environment.celltype == 1, 1.3, environment.celltype == 0, 1, 0.8)
gKr =  4.65854545454545618e-2 [mS/uF]
    in [mS/uF]
IKr = tune.ikr_rescale * fKr * gKr * sqrt(extracellular.ko / 5.4 [mM]) * O * (v - reversal_potentials.EK)
    in [A/F]

[IKs]
GKs = piecewise(environment.celltype == 1, GKs_b * 1.4, GKs_b)
    in [mS/uF]
GKs_b = 0.0011 [mS/uF]
    in [mS/uF]
    oxmeta: membrane_slow_delayed_rectifier_potassium_current_conductance
IKs = GKs * KsCa * xs1 * xs2 * (membrane.v - reversal_potentials.EKs)
    in [A/F]
    oxmeta: membrane_slow_delayed_rectifier_potassium_current
KsCa = 1 + 0.6 / (1 + (3.8e-5 [mM] / intracellular_ions.cai)^1.4)
    in [1]
txs1 = 817.3 [ms] + 1 [ms] / (0.0002326 * exp((membrane.v + 48.28 [mV]) / 17.8 [mV]) + 0.001292 * exp(-(membrane.v + 210 [mV]) / 230 [mV]))
    in [ms]
txs2 = 1 [ms] / (0.01 * exp((membrane.v - 50 [mV]) / 20 [mV]) + 0.0193 * exp(-(membrane.v + 66.54 [mV]) / 31 [mV]))
    in [ms]
dot(xs1) = (xs1ss - xs1) / txs1
    in [1]
xs1ss = 1 / (1 + exp(-(membrane.v + 11.6 [mV]) / 8.932 [mV]))
    in [1]
dot(xs2) = (xs2ss - xs2) / txs2
    in [1]
xs2ss = xs1ss
    in [1]

[INa]
GNa = 11.7802 [mS/uF]
    in [mS/uF]
    oxmeta: membrane_fast_sodium_current_conductance
INa = GNa * (membrane.v - reversal_potentials.ENa) * m^3 * ((1 - fINap) * h * j + fINap * hp * jp)
    in [A/F]
    oxmeta: membrane_fast_sodium_current
ah = piecewise(membrane.v >= -40 [mV], 0, 0.057 * exp(-(membrane.v + 80 [mV]) / 6.8 [mV]))
    in [1]
aj = piecewise(membrane.v >= -40 [mV], 0, (-25428 [1/mV] * exp(0.2444 [1/mV] * membrane.v) - 6.948e-6 [1/mV] * exp(-0.04391 [1/mV] * membrane.v)) * (membrane.v + 37.78 [mV]) / (1 + exp(0.311 [1/mV] * (membrane.v + 79.23 [mV]))))
    in [1]
bh = piecewise(membrane.v >= -40 [mV], 0.77 / (0.13 * (1 + exp(-(membrane.v + 10.66 [mV]) / 11.1 [mV]))), 2.7 * exp(0.079 [1/mV] * membrane.v) + 310000 * exp(0.3485 [1/mV] * membrane.v))
    in [1]
bj = piecewise(membrane.v >= -40 [mV], 0.6 * exp(0.057 [1/mV] * membrane.v) / (1 + exp(-0.1 [1/mV] * (membrane.v + 32 [mV]))), 0.02424 * exp(-0.01052 [1/mV] * membrane.v) / (1 + exp(-0.1378 [1/mV] * (membrane.v + 40.14 [mV]))))
    in [1]
fINap = 1 / (1 + CaMK.KmCaMK / CaMK.CaMKa)
    in [1]
dot(h) = (hss - h) / th
    in [1]
dot(hp) = (hssp - hp) / th
    in [1]
hss = 1 / (1 + exp((membrane.v + 71.55 [mV]) / 7.43 [mV]))^2
    in [1]
hssp = 1 / (1 + exp((membrane.v + 77.55 [mV]) / 7.43 [mV]))^2
    in [1]
dot(j) = (jss - j) / tj
    in [1]
dot(jp) = (jss - jp) / tjp
    in [1]
jss = hss
    in [1]
dot(m) = (mss - m) / tm
    in [1]
mss = 1 / (1 + exp(-(membrane.v + 56.86 [mV]) / 9.03 [mV]))^2
    in [1]
th = 1 [ms] / (ah + bh)
    in [ms]
tj = 1 [ms] / (aj + bj)
    in [ms]
tjp = 1.46 * tj
    in [ms]
tm = 0.1292 [ms] * exp(-((membrane.v + 45.79 [mV]) / 15.54 [mV])^2) + 0.06487 [ms] * exp(-((membrane.v - 4.823 [mV]) / 51.12 [mV])^2)
    in [ms]

[INaCa]
E1_i = x1_i / (x1_i + x2_i + x3_i + x4_i)
    in [1]
E1_ss = x1_ss / (x1_ss + x2_ss + x3_ss + x4_ss)
    in [1]
E2_i = x2_i / (x1_i + x2_i + x3_i + x4_i)
    in [1]
E2_ss = x2_ss / (x1_ss + x2_ss + x3_ss + x4_ss)
    in [1]
E3_i = x3_i / (x1_i + x2_i + x3_i + x4_i)
    in [1]
E3_ss = x3_ss / (x1_ss + x2_ss + x3_ss + x4_ss)
    in [1]
E4_i = x4_i / (x1_i + x2_i + x3_i + x4_i)
    in [1]
E4_ss = x4_ss / (x1_ss + x2_ss + x3_ss + x4_ss)
    in [1]
Gncx = piecewise(environment.celltype == 1, Gncx_b * 1.1, environment.celltype == 2, Gncx_b * 1.4, Gncx_b)
    in [mS/uF]
Gncx_b = 0.0034 [mS/uF]
    in [mS/uF]
    oxmeta: membrane_sodium_calcium_exchanger_current_conductance
INaCa_fractionSS = 0.35
    in [1]
INaCa_i = (1 - INaCa_fractionSS) * Gncx * allo_i * (physical_constants.zna * JncxNa_i + physical_constants.zca * JncxCa_i)
    in [A/F]
INaCa_ss = INaCa_fractionSS * Gncx * allo_ss * (physical_constants.zna * JncxNa_ss + physical_constants.zca * JncxCa_ss)
    in [A/F]
INaCa_total = INaCa_i + INaCa_ss
JncxCa_i = E2_i * k2_i - E1_i * k1_i
    in [mM/ms]
JncxCa_ss = E2_ss * k2_ss - E1_ss * k1_ss
    in [mM/ms]
JncxNa_i = 3 * (E4_i * k7_i - E1_i * k8_i) + E3_i * k4pp_i - E2_i * k3pp_i
    in [mM/ms]
JncxNa_ss = 3 * (E4_ss * k7_ss - E1_ss * k8_ss) + E3_ss * k4pp_ss - E2_ss * k3pp_ss
    in [mM/ms]
KmCaAct = 0.00015 [mM]
    in [mM]
allo_i = 1 / (1 + (KmCaAct / intracellular_ions.cai)^2)
    in [1]
allo_ss = 1 / (1 + (KmCaAct / intracellular_ions.cass)^2)
    in [1]
h10_i = kasymm + 1 + extracellular.nao / kna1 * (1 + extracellular.nao / kna2)
    in [1]
h10_ss = kasymm + 1 + extracellular.nao / kna1 * (1 + extracellular.nao / kna2)
    in [1]
h11_i = extracellular.nao * extracellular.nao / (h10_i * kna1 * kna2)
    in [1]
h11_ss = extracellular.nao * extracellular.nao / (h10_ss * kna1 * kna2)
    in [1]
h12_i = 1 / h10_i
    in [1]
h12_ss = 1 / h10_ss
    in [1]
h1_i = 1 + intracellular_ions.nai / kna3 * (1 + hna)
    in [1]
h1_ss = 1 + intracellular_ions.nass / kna3 * (1 + hna)
    in [1]
h2_i = intracellular_ions.nai * hna / (kna3 * h1_i)
    in [1]
h2_ss = intracellular_ions.nass * hna / (kna3 * h1_ss)
    in [1]
h3_i = 1 / h1_i
    in [1]
h3_ss = 1 / h1_ss
    in [1]
h4_i = 1 + intracellular_ions.nai / kna1 * (1 + intracellular_ions.nai / kna2)
    in [1]
h4_ss = 1 + intracellular_ions.nass / kna1 * (1 + intracellular_ions.nass / kna2)
    in [1]
h5_i = intracellular_ions.nai * intracellular_ions.nai / (h4_i * kna1 * kna2)
    in [1]
h5_ss = intracellular_ions.nass * intracellular_ions.nass / (h4_ss * kna1 * kna2)
    in [1]
h6_i = 1 / h4_i
    in [1]
h6_ss = 1 / h4_ss
    in [1]
h7_i = 1 + extracellular.nao / kna3 * (1 + 1 / hna)
    in [1]
h7_ss = 1 + extracellular.nao / kna3 * (1 + 1 / hna)
    in [1]
h8_i = extracellular.nao / (kna3 * hna * h7_i)
    in [1]
h8_ss = extracellular.nao / (kna3 * hna * h7_ss)
    in [1]
h9_i = 1 / h7_i
    in [1]
h9_ss = 1 / h7_ss
    in [1]
hca = exp(qca * membrane.vfrt)
    in [1]
hna = exp(qna * membrane.vfrt)
    in [1]
k1_i = h12_i * extracellular.cao * kcaon
    in [1]
k1_ss = h12_ss * extracellular.cao * kcaon
    in [1]
k2_i = kcaoff
    in [1]
k2_ss = kcaoff
    in [1]
k3_i = k3p_i + k3pp_i
    in [1]
k3_ss = k3p_ss + k3pp_ss
    in [1]
k3p_i = h9_i * wca
    in [1]
k3p_ss = h9_ss * wca
    in [1]
k3pp_i = h8_i * wnaca
    in [1]
k3pp_ss = h8_ss * wnaca
    in [1]
k4_i = k4p_i + k4pp_i
    in [1]
k4_ss = k4p_ss + k4pp_ss
    in [1]
k4p_i = h3_i * wca / hca
    in [1]
k4p_ss = h3_ss * wca / hca
    in [1]
k4pp_i = h2_i * wnaca
    in [1]
k4pp_ss = h2_ss * wnaca
    in [1]
k5_i = kcaoff
    in [1]
k5_ss = kcaoff
    in [1]
k6_i = h6_i * intracellular_ions.cai * kcaon
    in [1]
k6_ss = h6_ss * intracellular_ions.cass * kcaon
    in [1]
k7_i = h5_i * h2_i * wna
    in [1]
k7_ss = h5_ss * h2_ss * wna
    in [1]
k8_i = h8_i * h11_i * wna
    in [1]
k8_ss = h8_ss * h11_ss * wna
    in [1]
kasymm = 12.5
    in [1]
kcaoff = 5000 [mS/uF]
    in [mS/uF]
kcaon = 1500000 [mS/uF]
    in [mS/uF]
kna1 = 15 [mS/uF]
    in [mS/uF]
kna2 = 5 [mS/uF]
    in [mS/uF]
kna3 = 88.12 [mS/uF]
    in [mS/uF]
qca = 0.167
    in [1]
qna = 0.5224
    in [1]
wca = 60000
    in [1]
wna = 60000
    in [1]
wnaca = 5000
    in [1]
x1_i = k2_i * k4_i * (k7_i + k6_i) + k5_i * k7_i * (k2_i + k3_i)
    in [1]
x1_ss = k2_ss * k4_ss * (k7_ss + k6_ss) + k5_ss * k7_ss * (k2_ss + k3_ss)
    in [1]
x2_i = k1_i * k7_i * (k4_i + k5_i) + k4_i * k6_i * (k1_i + k8_i)
    in [1]
x2_ss = k1_ss * k7_ss * (k4_ss + k5_ss) + k4_ss * k6_ss * (k1_ss + k8_ss)
    in [1]
x3_i = k1_i * k3_i * (k7_i + k6_i) + k8_i * k6_i * (k2_i + k3_i)
    in [1]
x3_ss = k1_ss * k3_ss * (k7_ss + k6_ss) + k8_ss * k6_ss * (k2_ss + k3_ss)
    in [1]
x4_i = k2_i * k8_i * (k4_i + k5_i) + k3_i * k5_i * (k1_i + k8_i)
    in [1]
x4_ss = k2_ss * k8_ss * (k4_ss + k5_ss) + k3_ss * k5_ss * (k1_ss + k8_ss)
    in [1]

[INaK]
E1 = x1 / (x1 + x2 + x3 + x4)
    in [1]
E2 = x2 / (x1 + x2 + x3 + x4)
    in [1]
E3 = x3 / (x1 + x2 + x3 + x4)
    in [1]
E4 = x4 / (x1 + x2 + x3 + x4)
    in [1]
H = 1e-7 [mM]
    in [mM]
INaK = Pnak * (physical_constants.zna * JnakNa + physical_constants.zk * JnakK)
    in [A/F]
    oxmeta: membrane_sodium_potassium_pump_current
JnakK = 2 * (E4 * b1 - E3 * a1)
    in [mM/ms]
JnakNa = 3 * (E1 * a3 - E2 * b3)
    in [mM/ms]
Khp = 1.698e-7 [mM]
    in [mM]
Kki = 0.5 [mS/uF]
    in [mS/uF]
Kko = 0.3582 [mS/uF]
    in [mS/uF]
Kmgatp = 1.698e-7 [mM]
    in [mM]
Knai = Knai0 * exp(delta * membrane.vfrt / 3)
    in [mM]
Knai0 = 9.073 [mM]
    in [mM]
Knao = Knao0 * exp((1 - delta) * membrane.vfrt / 3)
    in [mM]
Knao0 = 27.78 [mM]
    in [mM]
Knap = 224 [mM]
    in [mM]
Kxkur = 292 [mM]
    in [mM]
MgADP = 0.05 [mM]
    in [mM]
MgATP = 9.8 [mM]
    in [mM]
P = eP / (1 + H / Khp + intracellular_ions.nai / Knap + intracellular_ions.ki / Kxkur)
    in [1]
Pnak = piecewise(environment.celltype == 1, Pnak_b * 0.9, environment.celltype == 2, Pnak_b * 0.7, Pnak_b)
    in [mS/uF]
Pnak_b = 15.4509 [mS/uF]
    in [mS/uF]
    oxmeta: membrane_sodium_potassium_pump_current_permeability
a1 = k1p * (intracellular_ions.nai / Knai)^3 / ((1 + intracellular_ions.nai / Knai)^3 + (1 + intracellular_ions.ki / Kki)^2 - 1)
    in [1]
a2 = k2p
    in [1]
a3 = k3p * (extracellular.ko / Kko)^2 / ((1 + extracellular.nao / Knao)^3 + (1 + extracellular.ko / Kko)^2 - 1)
    in [1]
a4 = k4p * MgATP / Kmgatp / (1 + MgATP / Kmgatp)
    in [1]
b1 = k1m * MgADP
    in [1]
b2 = k2m * (extracellular.nao / Knao)^3 / ((1 + extracellular.nao / Knao)^3 + (1 + extracellular.ko / Kko)^2 - 1)
    in [1]
b3 = k3m * P * H / (1 + MgATP / Kmgatp)
    in [1]
b4 = k4m * (intracellular_ions.ki / Kki)^2 / ((1 + intracellular_ions.nai / Knai)^3 + (1 + intracellular_ions.ki / Kki)^2 - 1)
    in [1]
delta = -0.155 [mV]
    in [mV]
eP = 4.2
    in [1]
k1m = 182.4 [mS/uF]
    in [mS/uF]
k1p = 949.5 [mS/uF]
    in [mS/uF]
k2m = 39.4 [mS/uF]
    in [mS/uF]
k2p = 687.2 [mS/uF]
    in [mS/uF]
k3m = 79300 [mS/uF]
    in [mS/uF]
k3p = 1899 [mS/uF]
    in [mS/uF]
k4m = 40 [mS/uF]
    in [mS/uF]
k4p = 639 [mS/uF]
    in [mS/uF]
x1 = a4 * a1 * a2 + b2 * b4 * b3 + a2 * b4 * b3 + b3 * a1 * a2
    in [1]
x2 = b2 * b1 * b4 + a1 * a2 * a3 + a3 * b1 * b4 + a2 * a3 * b4
    in [1]
x3 = a2 * a3 * a4 + b3 * b2 * b1 + b2 * b1 * a4 + a3 * a4 * b1
    in [1]
x4 = b4 * b3 * b2 + a3 * a4 * a1 + b2 * a4 * a1 + b3 * b2 * a1
    in [1]

[INaL]
GNaL = piecewise(environment.celltype == 1, GNaL_b * 0.6, GNaL_b)
    in [mS/uF]
GNaL_b = 0.0279 [mS/uF]
    in [mS/uF]
    oxmeta: membrane_persistent_sodium_current_conductance
INaL = GNaL * (membrane.v - reversal_potentials.ENa) * mL * ((1 - fINaLp) * hL + fINaLp * hLp)
    in [A/F]
    oxmeta: membrane_persistent_sodium_current
fINaLp = 1 / (1 + CaMK.KmCaMK / CaMK.CaMKa)
    in [1]
dot(hL) = (hLss - hL) / thL
    in [1]
dot(hLp) = (hLssp - hLp) / thLp
    in [1]
hLss = 1 / (1 + exp((membrane.v + 87.61 [mV]) / 7.488 [mV]))
    in [1]
hLssp = 1 / (1 + exp((membrane.v + 93.81 [mV]) / 7.488 [mV]))
    in [1]
dot(mL) = (mLss - mL) / tmL
    in [1]
mLss = 1 / (1 + exp(-(membrane.v + 42.85 [mV]) / 5.264 [mV]))
    in [1]
thL = 200 [ms]
    in [ms]
thLp = 3 * thL
    in [ms]
tmL = 0.1292 [ms] * exp(-((membrane.v + 45.79 [mV]) / 15.54 [mV])^2) + 0.06487 [ms] * exp(-((membrane.v - 4.823 [mV]) / 51.12 [mV])^2)
    in [ms]

[INab]
INab = PNab * membrane.vffrt * (intracellular_ions.nai * exp(membrane.vfrt) - extracellular.nao) / (exp(membrane.vfrt) - 1)
    in [A/F]
PNab =  1.92389999999999994e-9 [mS/uF]
    in [mS/uF]

[I_katp]
A_atp = 2 [mM]
    in [mM]
I_katp = fkatp * gkatp * akik * bkik * (membrane.v - reversal_potentials.EK)
    in [A/F]
    oxmeta: membrane_atp_dependent_potassium_current
K_atp = 0.25 [mM]
    in [mM]
K_o_n = 5 [mM]
    in [mM]
akik = (extracellular.ko / K_o_n)^0.24
    in [1]
bkik = 1 / (1 + (A_atp / K_atp)^2)
    in [1]
fkatp = 0
    in [1]
    oxmeta: membrane_atp_dependent_potassium_current_conductance
gkatp = 4.3195 [mS/uF]
    in [mS/uF]

[IpCa]
GpCa = 0.0005 [mS/uF]
    in [mS/uF]
IpCa = GpCa * intracellular_ions.cai / (KmCap + intracellular_ions.cai)
    in [A/F]
    oxmeta: membrane_calcium_pump_current
KmCap = 0.0005 [mM]
    in [mM]

[Ito]
AiF = 1 / (1 + exp((membrane.v + EKshift - 213.6 [mV]) / 151.2 [mV]))
    in [1]
AiS = 1 - AiF
    in [1]
EKshift = 0 [mV]
    in [mV]
Gto = piecewise(environment.celltype == 1, Gto_b * 2, environment.celltype == 2, Gto_b * 2, Gto_b)
    in [mS/uF]
Gto_b = 0.16 [mS/uF]
    in [mS/uF]
    oxmeta: membrane_transient_outward_current_conductance
Ito = Gto * (membrane.v - reversal_potentials.EK) * ((1 - fItop) * a * i + fItop * ap * ip)
    in [A/F]
    oxmeta: membrane_transient_outward_current
dot(a) = (ass - a) / ta
    in [1]
dot(ap) = (assp - ap) / ta
    in [1]
ass = 1 / (1 + exp(-(membrane.v + EKshift - 14.34 [mV]) / 14.82 [mV]))
    in [1]
assp = 1 / (1 + exp(-(membrane.v + EKshift - 24.34 [mV]) / 14.82 [mV]))
    in [1]
delta_epi = piecewise(environment.celltype == 1, 1 - 0.95 / (1 + exp((membrane.v + EKshift + 70 [mV]) / 5 [mV])), 1)
    in [1]
dti_develop = 1.354 + 0.0001 / (exp((membrane.v + EKshift - 167.4 [mV]) / 15.89 [mV]) + exp(-(membrane.v + EKshift - 12.23 [mV]) / 0.2154 [mV]))
    in [1]
dti_recover = 1 - 0.5 / (1 + exp((membrane.v + EKshift + 70 [mV]) / 20 [mV]))
    in [1]
fItop = 1 / (1 + CaMK.KmCaMK / CaMK.CaMKa)
    in [1]
i = AiF * iF + AiS * iS
    in [1]
dot(iF) = (iss - iF) / tiF
    in [1]
dot(iFp) = (iss - iFp) / tiFp
    in [1]
dot(iS) = (iss - iS) / tiS
    in [1]
dot(iSp) = (iss - iSp) / tiSp
    in [1]
ip = AiF * iFp + AiS * iSp
    in [1]
iss = 1 / (1 + exp((membrane.v + EKshift + 43.94 [mV]) / 5.711 [mV]))
    in [1]
ta = 1.0515 [ms] / (1 / (1.2089 * (1 + exp(-(membrane.v + EKshift - 18.4099 [mV]) / 29.3814 [mV]))) + 3.5 / (1 + exp((membrane.v + EKshift + 100 [mV]) / 29.3814 [mV])))
    in [ms]
tiF = tiF_b * delta_epi
    in [ms]
tiF_b = 4.562 [ms] + 1 [ms] / (0.3933 * exp(-(membrane.v + EKshift + 100 [mV]) / 100 [mV]) + 0.08004 * exp((membrane.v + EKshift + 50 [mV]) / 16.59 [mV]))
    in [ms]
tiFp = dti_develop * dti_recover * tiF
    in [ms]
tiS = tiS_b * delta_epi
    in [ms]
tiS_b = 23.62 [ms] + 1 [ms] / (0.001416 * exp(-(membrane.v + EKshift + 96.52 [mV]) / 59.05 [mV]) + 1.78e-8 * exp((membrane.v + EKshift + 114.1 [mV]) / 8.079 [mV]))
    in [ms]
tiSp = dti_develop * dti_recover * tiS
    in [ms]

[SERCA]
Jleak = 0.0048825 [mM/ms] * intracellular_ions.cansr / 15 [mM]
    in [mM/ms]
Jup = Jup_b * ((1 - fJupp) * Jupnp + fJupp * Jupp - Jleak)
    in [mM/ms]
    oxmeta: SR_uptake_current
Jup_b = 1
    in [1]
    oxmeta: SR_uptake_current_max
Jupnp = upScale * 0.005425 * intracellular_ions.cai / (intracellular_ions.cai + 0.00092 [mM])
    in [mM/ms]
Jupp = upScale * 2.75 * 0.005425 * intracellular_ions.cai / (intracellular_ions.cai + 0.00092 [mM] - 0.00017 [mM])
    in [mM/ms]
fJupp = 1 / (1 + CaMK.KmCaMK / CaMK.CaMKa)
    in [1]
upScale = piecewise(environment.celltype == 1, 1.3, 1)
    in [1]

[cell_geometry]
Acap = 2 * Ageo
    in [cm^2]
Ageo = 2 * 3.14 * rad * rad + 2 * 3.14 * rad * L
    in [cm^2]
L = 0.01 [cm]
    in [cm]
rad = 0.0011 [cm]
    in [cm]
vcell = 1000 [1 (0.001)] * 3.14 * rad * rad * L
    in [uL]
vjsr = 0.0048 * vcell
    in [uL]
vmyo = 0.68 * vcell
    in [uL]
vnsr = 0.0552 * vcell
    in [uL]
vss = 0.02 * vcell
    in [uL]

[diff]
Jdiff = (intracellular_ions.cass - intracellular_ions.cai) / tauCa
    in [mM/ms]
JdiffCl = (intracellular_ions.clss - intracellular_ions.cli) / tauNa
    in [mM/ms]
JdiffK = (intracellular_ions.kss - intracellular_ions.ki) / tauK
    in [mM/ms]
JdiffNa = (intracellular_ions.nass - intracellular_ions.nai) / tauNa
    in [mM/ms]
tauCa = 0.2 [ms]
    in [ms]
tauCl = 2 [ms]
    in [ms]
tauK = 2 [ms]
    in [ms]
tauNa = 2 [ms]
    in [ms]

[environment]
celltype = 1
    desc: Epi = 1
    in [1]
time = 0 [ms] bind time
    in [ms]
    oxmeta: time

[extracellular]
cao = 1.8 [mM]
    in [mM]
    oxmeta: extracellular_calcium_concentration
clo = 150 [mM]
    in [mM]
ko = 5 [mM]
    in [mM]
    oxmeta: extracellular_potassium_concentration
nao = 140 [mM]
    in [mM]
    oxmeta: extracellular_sodium_concentration

[intracellular_ions]
BSLmax = 1.124 [mM]
    in [mM]
BSRmax = 0.047 [mM]
    in [mM]
Bcai = 1 / (1 + cmdnmax * kmcmdn / (kmcmdn + cai)^2 + trpnmax * kmtrpn / (kmtrpn + cai)^2)
    in [1]
Bcajsr = 1 / (1 + csqnmax * kmcsqn / (kmcsqn + cajsr)^2)
    in [1]
Bcass = 1 / (1 + BSRmax * KmBSR / (KmBSR + cass)^2 + BSLmax * KmBSL / (KmBSL + cass)^2)
    in [1]
KmBSL = 0.0087 [mM]
    in [mM]
KmBSR = 0.00087 [mM]
    in [mM]
dot(cai) = Bcai * (-(ICaL.ICaL_i + IpCa.IpCa + ICab.ICab - 2 * INaCa.INaCa_i) * cell_geometry.Acap / (2 * physical_constants.F * cell_geometry.vmyo) - SERCA.Jup * cell_geometry.vnsr / cell_geometry.vmyo + diff.Jdiff * cell_geometry.vss / cell_geometry.vmyo)
    in [mM]
    oxmeta: cytosolic_calcium_concentration
dot(cajsr) = Bcajsr * (trans_flux.Jtr - ryr.Jrel)
    in [mM]
dot(cansr) = SERCA.Jup - trans_flux.Jtr * cell_geometry.vjsr / cell_geometry.vnsr
    in [mM]
dot(cass) = Bcass * (-(ICaL.ICaL_ss - 2 * INaCa.INaCa_ss) * cell_geometry.Acap / (2 * physical_constants.F * cell_geometry.vss) + ryr.Jrel * cell_geometry.vjsr / cell_geometry.vss - diff.Jdiff)
    in [mM]
dot(cli) = (ICl.IClb + ICl.IClCa_sl) * cell_geometry.Acap / (physical_constants.F * cell_geometry.vmyo) + diff.JdiffCl * cell_geometry.vss / cell_geometry.vmyo
    in [mM]
dot(clss) = ICl.IClCa_junc * cell_geometry.Acap / (physical_constants.F * cell_geometry.vss) - diff.JdiffCl
    in [mM]
cmdnmax = piecewise(environment.celltype == 1, cmdnmax_b * 1.3, cmdnmax_b)
    in [mM]
cmdnmax_b = 0.05 [mM]
    in [mM]
csqnmax = 10 [mM]
    in [mM]
dot(ki) = -(Ito.Ito + IKr.IKr + IKs.IKs + IK1.IK1 + IKb.IKb + I_katp.I_katp + membrane.Istim - 2 * INaK.INaK + ICaL.ICaK_i) * cell_geometry.Acap / (physical_constants.F * cell_geometry.vmyo) + diff.JdiffK * cell_geometry.vss / cell_geometry.vmyo
    in [mM]
    oxmeta: cytosolic_potassium_concentration
kmcmdn = 0.00238 [mM]
    in [mM]
kmcsqn = 0.8 [mM]
    in [mM]
kmtrpn = 0.0005 [mM]
    in [mM]
dot(kss) = -ICaL.ICaK_ss * cell_geometry.Acap / (physical_constants.F * cell_geometry.vss) - diff.JdiffK
    in [mM]
dot(nai) = -(INa.INa + INaL.INaL + 3 * INaCa.INaCa_i + ICaL.ICaNa_i + 3 * INaK.INaK + INab.INab) * cell_geometry.Acap / (physical_constants.F * cell_geometry.vmyo) + diff.JdiffNa * cell_geometry.vss / cell_geometry.vmyo
    in [mM]
    oxmeta: cytosolic_sodium_concentration
dot(nass) = -(ICaL.ICaNa_ss + 3 * INaCa.INaCa_ss) * cell_geometry.Acap / (physical_constants.F * cell_geometry.vss) - diff.JdiffNa
    in [mM]
trpnmax = 0.07 [mM]
    in [mM]

[membrane]
# Istim = piecewise(environment.time >= i_Stim_Start and environment.time - i_Stim_Start - floor((environment.time - i_Stim_Start) / i_Stim_Period) * i_Stim_Period <= i_Stim_PulseDuration, i_Stim_Amplitude, 0 [A/F])
Istim = pace * i_Stim_Amplitude
    in [A/F]
    oxmeta: membrane_stimulus_current
# i_Stim_Amplitude = -53 [A/F]
i_Stim_Amplitude = -80 [A/F]
    in [A/F]
    oxmeta: membrane_stimulus_current_amplitude
# i_Stim_End = 1e17 [ms]
#     in [ms]
# i_Stim_Period = 1000 [ms]
#     in [ms]
#     oxmeta: membrane_stimulus_current_period
# i_Stim_PulseDuration = 1 [ms]
#     in [ms]
#     oxmeta: membrane_stimulus_current_duration
# i_Stim_Start = 0 [ms]
#     in [ms]
#     oxmeta: membrane_stimulus_current_offset
pace = 0 bind pace
    in [1]
dot(v) = -(INa.INa + INaL.INaL + Ito.Ito + ICaL.ICaL + ICaL.ICaNa + ICaL.ICaK + IKr.IKr + IKs.IKs + IK1.IK1 + INaCa.INaCa_i + INaCa.INaCa_ss + INaK.INaK + INab.INab + IKb.IKb + IpCa.IpCa + ICab.ICab + ICl.IClCa + ICl.IClb + I_katp.I_katp + Istim)
    in [mV]
    oxmeta: membrane_voltage
vffrt = v * physical_constants.F * physical_constants.F / (physical_constants.R * physical_constants.T)
    in [C/mol]
vfrt = v * physical_constants.F / (physical_constants.R * physical_constants.T)
    in [1]

[physical_constants]
F = 96485 [C/mol]
    in [C/mol]
R = 8314 [mJ/mol/K]
    in [mJ/mol/K]
T = 310 [K]
    in [K]
zca = 2
    in [1]
zcl = -1
    in [1]
zk = 1
    in [1]
zna = 1
    in [1]

[reversal_potentials]
ECl = physical_constants.R * physical_constants.T / (physical_constants.zcl * physical_constants.F) * log(extracellular.clo / intracellular_ions.cli)
    in [mV]
EClss = physical_constants.R * physical_constants.T / (physical_constants.zcl * physical_constants.F) * log(extracellular.clo / intracellular_ions.clss)
    in [mV]
EK = physical_constants.R * physical_constants.T / (physical_constants.zk * physical_constants.F) * log(extracellular.ko / intracellular_ions.ki)
    in [mV]
EKs = physical_constants.R * physical_constants.T / (physical_constants.zk * physical_constants.F) * log((extracellular.ko + PKNa * extracellular.nao) / (intracellular_ions.ki + PKNa * intracellular_ions.nai))
    in [mV]
ENa = physical_constants.R * physical_constants.T / (physical_constants.zna * physical_constants.F) * log(extracellular.nao / intracellular_ions.nai)
    in [mV]
PKNa = 0.01833
    in [1]

[ryr]
Jrel = Jrel_b * ((1 - fJrelp) * Jrel_np + fJrelp * Jrel_p)
    in [mM/ms]
    oxmeta: SR_release_current
Jrel_b = 1.5378
    in [1]
    oxmeta: SR_release_current_max
Jrel_inf = piecewise(environment.celltype == 2, Jrel_inf_b * 1.7, Jrel_inf_b)
    in [mM/ms]
Jrel_inf_b = -a_rel * ICaL.ICaL_ss / 1 [A/F] / (1 + (cajsr_half / intracellular_ions.cajsr)^8)
    in [mM/ms]
Jrel_infp = piecewise(environment.celltype == 2, Jrel_infp_b * 1.7, Jrel_infp_b)
    in [mM/ms]
Jrel_infp_b = -a_relp * ICaL.ICaL_ss / 1 [A/F] / (1 + (cajsr_half / intracellular_ions.cajsr)^8)
    in [mM/ms]
dot(Jrel_np) = (Jrel_inf - Jrel_np) / tau_rel
    in [mM/ms]
dot(Jrel_p) = (Jrel_infp - Jrel_p) / tau_relp
    in [mM/ms]
a_rel = 0.5 [mM/ms] * bt / 1 [ms]
    in [mM/ms]
a_relp = 0.5 [mM/ms] * btp / 1 [ms]
    in [mM/ms]
bt = 4.75 [ms]
    in [ms]
btp = 1.25 * bt
    in [ms]
cajsr_half = 1.7 [mM]
    in [mM]
fJrelp = 1 / (1 + CaMK.KmCaMK / CaMK.CaMKa)
    in [1]
tau_rel = piecewise(tau_rel_b < 0.001 [ms], 0.001 [ms], tau_rel_b)
    in [ms]
tau_rel_b = bt / (1 + 0.0123 [mM] / intracellular_ions.cajsr)
    in [ms]
tau_relp = piecewise(tau_relp_b < 0.001 [ms], 0.001 [ms], tau_relp_b)
    in [ms]
tau_relp_b = btp / (1 + 0.0123 [mM] / intracellular_ions.cajsr)
    in [ms]

[trans_flux]
Jtr = (intracellular_ions.cansr - intracellular_ions.cajsr) / 60 [ms]
    in [mM/ms]

